PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'gender': u'', u'age': u'', u'session': u'001', u'participant': u'', u'colour blindness': u''}
  Units = use prefs
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = exp1_stroop
  Screen = 1
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Routines
  Routine trial
    TextComponent fix_cross
      color = black
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent image
      stopVal [duration (s)] = 3
      units = cm
      size = [6,2.5]
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    KeyboardComponent trial_resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = True
      allowedKeys = 'left','right'
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  Routine breaktime_3
  Routine EndingMessage
    TextComponent end_txt
      color = black
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for your participation!
        Blah blah blah
  Routine breaktime
  Routine Instructions
    TextComponent instr_txt
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thanks for taking part. In this task, you need to focus and report whether the COLOUR of the fonts matches the WORD itself.
        Press Left (<-) when the COLOUR of the fonts matches the WORD
        Press Right (->) when the COLOUR of the fonts DOESN’T match the WORD
        Press SPACE to continue
    KeyboardComponent instr_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions2.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'img_path': u'img/red-red.png', 'colour': u'red', 'word': u'red', 'congruent': 1, 'corrAns': u'left'},
      {'img_path': u'img/red-blue.png', 'colour': u'blue', 'word': u'red', 'congruent': 0, 'corrAns': u'right'},
      {'img_path': u'img/blue-red.png', 'colour': u'red', 'word': u'blue', 'congruent': 0, 'corrAns': u'right'},
      {'img_path': u'img/blue-blue.png', 'colour': u'blue', 'word': u'blue', 'congruent': 1, 'corrAns': u'left'},
      {'img_path': u'img/white-black.png', 'colour': u'black', 'word': u'white', 'congruent': 0, 'corrAns': u'right'},
      {'img_path': u'img/black-white.png', 'colour': u'white', 'word': u'black ', 'congruent': 0, 'corrAns': u'right'},
      {'img_path': u'img/white-white.png', 'colour': u'white', 'word': u'white', 'congruent': 1, 'corrAns': u'left'},
      {'img_path': u'img/black-black.png', 'colour': u'black', 'word': u'black ', 'congruent': 1, 'corrAns': u'left'}]
    Routine trial
    Routine breaktime
  LoopTerminator trials_loop
  Routine EndingMessage
